PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = faces_experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine introduction
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    TextComponent introduction_text
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will see a series of faces showing different emotional expressions.

        Your task is to identify which emotion is being expressed by selecting one of the buttons below each face.

        Please try to respond as accurately and as quickly as possible.

        When you are ready to begin, press the Start button below.
    ButtonComponent btn_start
      bold = True
      borderColor = black
      callback = pass
      fillColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (0.35, 0.15)
      startVal [time (s)] = 0
      text = Start
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  Routine trial_face
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    ImageComponent image_stim
      image [set every repeat] = $image_file
      pos = (0, 0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.25
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  Routine trial_response
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    ButtonComponent btn_anger_2
      bold = True
      borderColor = black
      borderWidth = 2
      fillColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (-0.40, -0.25)
      size = (0.30, 0.12)
      startVal [time (s)] = 0
      text = Anger
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      callback:
        clickedEmotion = "anger"
    ButtonComponent btn_disgust_2
      bold = True
      borderColor = black
      borderWidth = 2
      fillColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (0.00, -0.25)
      size = (0.30, 0.12)
      startVal [time (s)] = 0
      text = Disgust
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      callback:
        clickedEmotion = "disgust"
    ButtonComponent btn_fear_2
      bold = True
      borderColor = black
      borderWidth = 2
      fillColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (0.40, -0.25)
      size = (0.30, 0.12)
      startVal [time (s)] = 0
      text = Fear
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      callback:
        clickedEmotion = "fear"
    ButtonComponent btn_happiness_2
      bold = True
      borderColor = black
      borderWidth = 2
      fillColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (-0.40, -0.40)
      size = (0.30, 0.12)
      startVal [time (s)] = 0
      text = Happiness
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      callback:
        clickedEmotion = "happiness"
    ButtonComponent btn_neutrality_2
      bold = True
      borderColor = black
      borderWidth = 2
      fillColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (0.00, -0.40)
      size = (0.30, 0.12)
      startVal [time (s)] = 0
      text = Neutrality
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      callback:
        clickedEmotion = "neutrality"
    ButtonComponent btn_sadness_2
      bold = True
      borderColor = black
      borderWidth = 2
      fillColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (0.40, -0.40)
      size = (0.30, 0.12)
      startVal [time (s)] = 0
      text = Sadness
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      callback:
        clickedEmotion = "sadness"
    CodeComponent code_correctness_2
      Code Type = Auto->JS
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      Begin Routine:
        clickedEmotion = ""
      End Routine:
        # Save the emotion clicked (set by the button's callback)
        thisExp.addData("clickedEmotion", clickedEmotion)

        # Compute correctness
        correct = int(clickedEmotion == correct_emotion)

        # Save correctness
        thisExp.addData("correct", correct)
    CodeComponent fix_button_size
      Code Type = Auto->JS
      Begin Routine:
        // Resize buttons manually for web version
        btn_anger_2.setSize([0.3, 0.15]);
        btn_disgust_2.setSize([0.3, 0.15]);
        btn_fear_2.setSize([0.3, 0.15]);
        btn_happiness_2.setSize([0.3, 0.15]);
        btn_neutrality_2.setSize([0.3, 0.15]);
        btn_sadness_2.setSize([0.3, 0.15]);
  Routine end_screen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating.
        You may now close the browser window.
Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_faces.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_file': 'faces/004_o_m_a_a.jpg', 'correct_emotion': 'anger'},
      {'image_file': 'faces/004_o_m_a_b.jpg', 'correct_emotion': 'anger'},
      {'image_file': 'faces/004_o_m_d_a.jpg', 'correct_emotion': 'disgust'},
      {'image_file': 'faces/004_o_m_d_b.jpg', 'correct_emotion': 'disgust'},
      {'image_file': 'faces/004_o_m_f_a.jpg', 'correct_emotion': 'fear'},
      {'image_file': 'faces/004_o_m_f_b.jpg', 'correct_emotion': 'fear'},
      {'image_file': 'faces/004_o_m_h_a.jpg', 'correct_emotion': 'happiness'},
      {'image_file': 'faces/004_o_m_h_b.jpg', 'correct_emotion': 'happiness'},
      {'image_file': 'faces/004_o_m_n_a.jpg', 'correct_emotion': 'neutrality'},
      {'image_file': 'faces/004_o_m_n_b.jpg', 'correct_emotion': 'neutrality'},
      {'image_file': 'faces/004_o_m_s_a.jpg', 'correct_emotion': 'sadness'},
      {'image_file': 'faces/004_o_m_s_b.jpg', 'correct_emotion': 'sadness'},
      {'image_file': 'faces/066_y_m_a_a.jpg', 'correct_emotion': 'anger'},
      {'image_file': 'faces/066_y_m_a_b.jpg', 'correct_emotion': 'anger'},
      {'image_file': 'faces/066_y_m_d_a.jpg', 'correct_emotion': 'disgust'},
      {'image_file': 'faces/066_y_m_d_b.jpg', 'correct_emotion': 'disgust'},
      {'image_file': 'faces/066_y_m_f_a.jpg', 'correct_emotion': 'fear'},
      {'image_file': 'faces/066_y_m_f_b.jpg', 'correct_emotion': 'fear'},
      {'image_file': 'faces/066_y_m_h_a.jpg', 'correct_emotion': 'happiness'},
      {'image_file': 'faces/066_y_m_h_b.jpg', 'correct_emotion': 'happiness'},
      {'image_file': 'faces/066_y_m_n_a.jpg', 'correct_emotion': 'neutrality'}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
    Routine trial_face
    Routine trial_response
  LoopTerminator trials
  Routine end_screen
